<?xml version="1.0" encoding="utf-8"?>
<Parameters Duration="1" FOVx="9.6" FOVy="9.6" FOVz="1" GradMaxAmpl="12" GradSlewRate="53.5" Name="P" Nx="16" Ny="16" Nz="1" TE="4.5" TR="6">
   <ConcatSequence Aux1="1500" Name="Venc">
      <CONCATSEQUENCE Name="C4" Repetitions="2">
         <ConcatSequence Name="C0" Repetitions="5">
            <ATOMICSEQUENCE Name="A0">
               <SINCRFPULSE Apodization="0.5" Bandwidth="4" FlipAngle="a1" Name="P0" Observe="P1,FlipAngle" Symmetry="0.5" Zeros="3"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D0" Observe="P,TR" StartSeq="A0"/>
         </ConcatSequence>
         <ConcatSequence Name="C" Observe="P,Ny" Repetitions="a1">
            <ATOMICSEQUENCE Name="A1">
               <SINCRFPULSE Apodization="0.5" Bandwidth="4" FlipAngle="30" Name="P1" Symmetry="0.5" Zeros="3"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="a1" DelayType="C2C" Name="D1" Observe="P,TE" StartSeq="A1" StopSeq="A6"/>
            <ATOMICSEQUENCE Name="A2">
               <TRAPGRADPULSE Area="((-1)^a2)*1000*3.14/(2*a1 * a3)" Axis="GZ" Duration="a1" Name="Genc1" Observe="P,Duration/C4,Counter/Venc,Aux1"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A3">
               <TRAPGRADPULSE Area="-a1" Axis="GZ" Duration="a2" Name="Genc2" Observe="Genc1,Area/Genc1,Duration"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A4">
               <TRAPGRADPULSE Area="-a1/2" Axis="GX" Name="P5" Observe="P6,Area"/>
               <TRAPGRADPULSE Area="a1*(1-2*a2/(a3-1))" Axis="GY" Name="P3" Observe="P,KMAXy/C,Counter/P,Ny"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A6">
               <TRAPGRADPULSE ADCs="a2" Axis="GX" FlatTopArea="2*a1" FlatTopTime="a3" Name="P6" Observe="P,KMAXx/P,Nx/P,Duration"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D2" Observe="P,TR" StartSeq="A1"/>
         </ConcatSequence>
      </CONCATSEQUENCE>
   </ConcatSequence>
</Parameters>